{
  "Name": "CHEVRON",
  "StorageDirectory": "/var/lib/orthanc/db",
  "IndexDirectory": "/var/lib/orthanc/db",
  "StorageCompression": true,
  "MaximumStorageSize": 0,
  "MaximumPatientCount": 0,
  "MaximumStorageCacheSize": 128,
  "LuaScripts": [],
  "Plugins": [
    "/usr/share/orthanc/plugins",
    "/usr/local/share/orthanc/plugins"
  ],
  "OHIF": {
    "UserConfiguration": "/usr/local/share/orthanc/ohif.js"
  },
  "ConcurrentJobs": 8,
  "HttpServerEnabled": true,
  "OrthancExplorerEnabled": true,
  "HttpPort": 8042,
  "HttpDescribeErrors": true,
  "HttpCompressionEnabled": true,
  "WebDavEnabled": true,
  "WebDavDeleteAllowed": false,
  "WebDavUploadAllowed": true,
  "DicomServerEnabled": true,
  "DicomAet": "CHEVRON",
  "DicomCheckCalledAet": true,
  "DicomPort": 4242,
  "DefaultEncoding": "Latin1",
  "AcceptedTransferSyntaxes": [
    "1.2.840.10008.1.*"
  ],
  "UnknownSopClassAccepted": false,
  "DicomScpTimeout": 30,
  "RemoteAccessAllowed": true,
  "SslEnabled": false,
  "SslCertificate": "certificate.pem",
  "SslMinimumProtocolVersion": 4,
  "SslVerifyPeers": false,
  "SslTrustedClientCertificates": "trustedClientCertificates.pem",
  "AuthenticationEnabled": false,
  "RegisteredUsers": {
    "dicom": "letmein"
  },
  "DicomTlsEnabled": false,
  "DicomTlsRemoteCertificateRequired": true,
  "DicomAlwaysAllowEcho": true,
  "DicomAlwaysAllowStore": true,
  "DicomAlwaysAllowFind": false,
  "DicomAlwaysAllowFindWorklist": false,
  "DicomAlwaysAllowGet": false,
  "DicomAlwaysAllowMove": false,
  "DicomCheckModalityHost": false,
  "DicomModalities": {
    // "MAPDRX" : [ "MAPDR", "127.0.0.1", 11112]
  },
  "DicomModalitiesInDatabase": false,
  "DicomEchoChecksFind": false,
  "DicomScuTimeout": 10,
  "DicomScuPreferredTransferSyntax": "1.2.840.10008.1.2.1",
  "DicomThreadsCount": 4,
  "OrthancPeers": {},
  "OrthancPeersInDatabase": false,
  "HttpProxy": "",
  "HttpVerbose": false,
  "HttpTimeout": 60,
  "HttpsVerifyPeers": true,
  "HttpsCACertificates": "/etc/ssl/certs/ca-certificates.crt",
  "UserMetadata": {
    // "Sample" : 1024
  },
  "UserContentType": {
    // "sample" : 1024
    // "sample2" : [ 1025, "application/pdf" ]
  },
  "StableAge": 60,
  "StrictAetComparison": false,
  "StoreMD5ForAttachments": true,
  "LimitFindResults": 0,
  "LimitFindInstances": 0,
  "LogExportedResources": false,
  "KeepAlive": true,
  "TcpNoDelay": true,
  "HttpThreadsCount": 50,
  "StoreDicom": true,
  "DicomAssociationCloseDelay": 5,
  "QueryRetrieveSize": 100,
  "CaseSensitivePN": false,
  "LoadPrivateDictionary": true,
  "Dictionary": {},
  "SynchronousCMove": true,
  "JobsHistorySize": 10,
  "SaveJobs": true,
  "OverwriteInstances": false,
  "MediaArchiveSize": 1,
  "StorageAccessOnFind": "Always",
  "MetricsEnabled": true,
  "ExecuteLuaEnabled": false,
  "HttpRequestTimeout": 30,
  "DefaultPrivateCreator": "",
  "StorageCommitmentReportsSize": 100,
  "TranscodeDicomProtocol": true,
  "BuiltinDecoderTranscoderOrder": "After",
  "IngestTranscoding": "1.2.840.10008.1.2.4.91",
  "IngestTranscodingOfUncompressed": true,
  "IngestTranscodingOfCompressed": true,
  "DicomLossyTranscodingQuality": 90,
  "SyncStorageArea": true,
  "MallocArenaMax": 5,
  "DeidentifyLogs": true,
  "DeidentifyLogsDicomVersion": "2021b",
  "MaximumPduLength": 16384,
  "CheckRevisions": false,
  "SynchronousZipStream": true,
  "ZipLoaderThreads": 0,
  "Warnings": {
    "W001_TagsBeingReadFromStorage": true,
    "W002_InconsistentDicomTagsInDb": true
  },

  "StoneWebViewer": {
  
    /**
     * Enables/disables the print button.
     **/
    "PrintEnabled" : false,

    /**
     * Enables/disables the button to download a screenshot of the
     * active viewport as a JPEG file.
     **/
    "DownloadAsJpegEnabled" : false,

    /**
     * Enables/disables the button to download the display study.
     * Only used if "OrthancApiRoot" is properly set.
     **/
    "DownloadStudyEnabled" : false,
  
    /**
     * If option "DownloadDicomDir" is set to "true", the Stone Web
     * viewer will create DICOMDIR media archives (as generated by the
     * route "/studies/{id}/media" of Orthanc), instead of archives
     * containing a human-readable hierarchy of folders (as generated
     * by the route "/studies/{id}/archive").
     **/
    "DownloadDicomDir" : false,

    /**
     * By setting option "InstitutionLogo" to an URL containing an
     * image, this logo will be displayed at the bottom-left of the
     * Stone Web viewer.
     **/
    "InstitutionLogo" : "logo.png",
  
    /**
     * Whether to display the info panel at startup. Allowed values:
     * "Always", "Never", "User". With "User", the user can decide to
     * show or not the info panel in the user preferences panel (this
     * is implemented using a cookie). (New in Stone Web viewer 2.4)
     **/
    "ShowInfoPanelAtStartup": "Never",

    /**
     * Whether to give access to the user preferences window. (New in
     * Stone Web viewer 2.4)
     **/
    "ShowUserPreferencesButton" : true,

    /**
     * Display a "not for diagnostic usage" disclaimer above the list
     * of studies/series. (New in Stone Web viewer 2.4)
     **/
    "ShowNotForDiagnosticUsageDisclaimer": false
    
  },

  "PostgreSQL": {
    "EnableIndex": true,
    "EnableStorage": false, // DICOM files are stored in the Orthanc container in /var/lib/orthanc/db/
    "Host": "postgres", // the name of the PostgreSQL container
    "Port": 5432,
    "Database": "orthanc", // default database name in PostgreSQL container (no need to create it)
    "Username": "postgres", // default user name in PostgreSQL container (no need to create it)
    "Password": "pgpassword"
  }
}